CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'For a large screen, it may take a long time to read and collect all the images. E.g., for a screen of 830k files (images+thumbnails), it took ~2 hrs to process. However, this only needs to be done once as the file list is saved as part of the project file.', '', 'Recommended to save time: Drag/drop the images once for a single project (e.g, QC), save the project as a template and then copy/paste analysis modules from the other two by opening additional instances of CellProfiler, then save them as separate projects.']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
    Filter images?:Custom
    Select the rule criteria:and (or (extension does istif) (file does endwith ".npy")) (file doesnot contain "thumb")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'The settings here allow the user to extract (assuming an ImageXpress microscope is used):', '* The UserStem prefix, and the Well and Site IDs from the filename, as well as the channel number.', '* The 5-digit Plate ID, and optionally, the date of acquisition from the folder name. If needed, the regular expression can modified to collect the barcode ID as well.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Cell>.*)_(?P<Plate>.*)-Scene-(?P<Scene>[0-9]{4})-P(?P<Position>[0-9]*)-(?P<Well>.{3})-(?P<general>.*)_(?P<Channeln>.*)_ORG.tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Cell>.{7})_(?P<Channeln_ill>.*).npy
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does endwith ".npy")
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', 'The settings her match the channels by the channel number collected in the Metadata module.', 'Setting the image set matching method to “Metadata” has the advantage of omitting sites in which there is a metadata mismatch, i.e, missing files.']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'Mito_ill': u'Cell', u'RNA_ill': u'Cell', u'Nucleus': u'Cell', u'Mito': u'Cell', u'Nucleu_ill': u'Cell', u'ER_ill': u'Cell', u'RNA': u'Cell', u'AGP_ill': u'Cell', u'ER': u'Cell', u'AGP': u'Cell'}, {u'Mito_ill': None, u'RNA_ill': None, u'Nucleus': u'Plate', u'Mito': u'Plate', u'Nucleu_ill': None, u'ER_ill': None, u'AGP': u'Plate', u'RNA': u'Plate', u'AGP_ill': None, u'ER': u'Plate'}, {u'Mito_ill': None, u'RNA_ill': None, u'Nucleus': u'Well', u'Mito': u'Well', u'Nucleu_ill': None, u'ER_ill': None, u'RNA': u'Well', u'AGP_ill': None, u'ER': u'Well', u'AGP': u'Well'}, {u'Mito_ill': None,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
    Image set matching method:Metadata
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    Assignments count:10
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channeln "DAPI")
    Name to assign these images:Nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channeln "AF488")
    Name to assign these images:ER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channeln "AF594")
    Name to assign these images:AGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channeln "AF514")
    Name to assign these images:RNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channeln "AF647")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channeln\_ill "DAPI")
    Name to assign these images:Nucleu_ill
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    Select the image type:Illumination function
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    Select the rule criteria:and (metadata does Channeln\_ill "AF488")
    Name to assign these images:ER_ill
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    Select the image type:Illumination function
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    Select the rule criteria:and (metadata does Channeln\_ill "AF594")
    Name to assign these images:AGP_ill
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    Select the image type:Illumination function
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    Select the rule criteria:and (metadata does Channeln\_ill "AF514")
    Name to assign these images:RNA_ill
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    Select the image type:Illumination function
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    Select the rule criteria:and (metadata does Channeln\_ill "AF647")
    Name to assign these images:Mito_ill
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    Select the image type:Illumination function
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '', 'No grouping is needed, so this module is not enabled.']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
    Do you want to group your images?:No
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
MeasureImageQuality:[module_num:5|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notes:['Generate image quality measurements for all channels. Image features made here include image blur measurements at multiple spatial scales, saturation metrics, and intensity-based measures. See Bray et al. J Biomol Screen, 17(2):266-74, 2012 for more details. ']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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:4
    Threshold count:1
    Select the images to measure:AGP,Nucleus
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:2
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageQuality:[module_num:6|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notes:['In addition to the more general image QC features, collect the thresholds for the DNA and RNA images. We use these two channels because the DNA image is used for nuclei identification and the RNA image is used for cell body identification. Examining the histogram of these values is often helpful in setting the lower threshold bound, as well as getting a sense of what outliers look like.', '', 'Note that different threshold methods are calculated for each channel, although more could be added. Also note that even though the channels will be illumination corrected in the feature extraction pipeline, we have not found that it affects QC assessment substantially.']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enabled:False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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:Nucleus
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
FlagImage:[module_num:7|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notes:['This module sets a metadata flag if an image set fails pre-selected quality control criteria. The quality control metrics should be evaluated with the prior quality control pipeline, and all measurements made in that pipeline should be available here by setting the MeasureImageQuality module(s) appropriately. ', '', 'NOTE: The image features and cutoffs set here are for illustrative purposes only; these should be adjusted after performing the quality control workflow; see Bray et al. J Biomol Screen, 17(2):266-74, 2012 for more details. If this module is not needed, it can be disabled by clicking the green checkmark to the left of the module name.']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
    Hidden:1
    Hidden:4
    Name the flag's category:Metadata
    Name the flag:Dropped_Images
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_Nucleus
    Flag images based on low values?:Yes
    Minimum value:-2.50685
    Flag images based on high values?:Yes
    Maximum value:-0.98758
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_StdIntensity_Nucleus
    Flag images based on low values?:Yes
    Minimum value:0.002262
    Flag images based on high values?:Yes
    Maximum value:0.009069
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_StdIntensity_AGP
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.029547
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_AGP
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.0019052
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
CorrectIlluminationApply:[module_num:8|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notes:['Correct each image channel by dividing by the respective illumination correction image. See Singh et al. J Microscopy, 256(3): 231-6, 2014 for more details.']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
    Select the input image:Nucleus
    Name the output image:corNucleus
    Select the illumination function:Nucleu_ill
    Select how the illumination function is applied:Divide
    Select the input image:ER
    Name the output image:corER
    Select the illumination function:ER_ill
    Select how the illumination function is applied:Divide
    Select the input image:AGP
    Name the output image:corAGP
    Select the illumination function:AGP_ill
    Select how the illumination function is applied:Divide
    Select the input image:RNA
    Name the output image:corRNA
    Select the illumination function:RNA_ill
    Select how the illumination function is applied:Divide
    Select the input image:Mito
    Name the output image:corMito
    Select the illumination function:Mito_ill
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:9|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notes:['Identify the nuclei based on the DNA image.', '', 'The settings here were chosen based on the image data and acqusition settings provided in Gustafsdottir et al, PLoS One 8, e80999, 2013. Changing the image acqusition settings may affect a number of these parameters:', '* Typical diameter of objects: From the display window menu, select Tools > Measure length. Click/drag to measure diameters of a few select nuclei.', '* Thresholding strategy: Global works fine in most cases, but Adaptive may work better if the background has non-uniform illumination. However, the illumination correction in CorrectIlluminationApply should mitigate the latter.', '* Thresholding method: Select the method which provides the best foreground/background separation. Adjust the threshold corrrection factor if the threshold is concistently above/below where you want it to be for most images tested. ', '* Lower threshold bound: Mouse over the background region to see the intensity variation in the lower-right of the display window.', '* Method to distinguish clumped objects: Use “Intensity” if the intensity gradient dividing touching nuclei are pretty clear, even if clumpy. Use “Shape” if the nuclei are usually well-separated (and “Intensity” doesn’t work).', '* Method to draw dividing lines between clumped objects: “Intensity” usually gives more realistic-looking boundary lines.', '* Size of smoothing filter/minimum distance between local maxima: Override defaults if nuclei are getting under/over-segmented.', '* Fill holes in identified objects: Currently set to “Never” since holes in nuclei may represent a phenotype. ']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
    Select the input image:corNucleus
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):45,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.6
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.02,0.5
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
IdentifySecondaryObjects:[module_num:10|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notes:['Identify the cells using the nuclei objects plus an image representative of the cell body. Several of the channels could suffice for this purpose, but we chose the RNA channel as optimal. Using the “Watershed-Image” option over the default “Propagate” methods seems to often better capture the cell boundaries, especially when the cells are confluent.']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
    Select the input objects:Nuclei
    Name the objects to be identified:ER
    Select the method to identify the secondary objects:Propagation
    Select the input image:corER
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3448
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.02,0.5
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
IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:ER
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:corAGP
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.012,0.5
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
IdentifyTertiaryObjects:[module_num:12|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
    Select the larger identified objects:Cell
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureColocalization:[module_num:13|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
    Hidden:5
    Hidden:3
    Select an image to measure:corNucleus
    Select an image to measure:corER
    Select an image to measure:corMito
    Select an image to measure:corAGP
    Select an image to measure:corRNA
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:Nuclei
    Select an object to measure:Cell
    Select an object to measure:Cytoplasm
    Run all metrics?:Yes
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
MeasureGranularity:[module_num:14|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
    Image count:5
    Object count:0
    Select an image to measure:corNucleus
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Object count:3
    Select an image to measure:corER
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cell
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Object count:3
    Select an image to measure:corAGP
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cell
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Object count:3
    Select an image to measure:corRNA
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cell
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Object count:3
    Select an image to measure:corMito
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cell
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:15|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
    Hidden:5
    Select an image to measure:corNucleus
    Select an image to measure:corER
    Select an image to measure:corAGP
    Select an image to measure:corRNA
    Select an image to measure:corMito
    Select objects to measure:Cell
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei

MeasureObjectNeighbors:[module_num:16|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
    Select objects to measure:Cell
    Select neighboring objects to measure:Cell
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:17|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:1
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:18|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
    Select objects to measure:Cell
    Select neighboring objects to measure:Cell
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:19|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
    Hidden:5
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select an image to measure:corNucleus
    Select an image to measure:corER
    Select an image to measure:corAGP
    Select an image to measure:corRNA
    Select an image to measure:corMito
    Select objects to measure:Cell
    Object to use as center?:These objects
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:20|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
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Select objects to measure:Cell
    Calculate the Zernike features?:Yes

MeasureTexture:[module_num:21|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enabled:False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
    Hidden:5
    Hidden:3
    Hidden:3
    Select an image to measure:corNucleus
    Select an image to measure:corAGP
    Select an image to measure:corER
    Select an image to measure:corMito
    Select an image to measure:corRNA
    Select objects to measure:Cell
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10
    Measure images or objects?:Both

OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:Yes
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    Name the output image:NucleiOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Nuclei

OverlayOutlines:[module_num:23|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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Cell

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Cell>_\g<Plate>_\g<Well>_Position_\g<Position>_nuclei_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|nuclei_outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Cell>_\g<Plate>_\g<Well>_Position_\g<Position>_cell_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|cell_outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToDatabase:[module_num:26|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:hTMC_analysis.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:AGP,CellOutlines,ER,Mito,NucleiOutlines,Nucleus,RNA
    Auto-scale thumbnail pixel intensities?:Yes
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    Experiment name:analysis
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    Export object relationships?:No
    Overwrite without warning?:Data and schema
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    Create a CellProfiler Analyst workspace file?:No
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