CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'For a large screen, it may take a long time to read and collect all the images. E.g., for a screen of 830k files (images+thumbnails), it took ~2 hrs to process. However, this only needs to be done once as the file list is saved as part of the project file.', '', 'Recommended to save time: Drag/drop the images once for a single project (e.g, QC), save the project as a template and then copy/paste analysis modules from the other two by opening additional instances of CellProfiler, then save them as separate projects.']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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (file doesnot contain "thumb")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'The settings here allow the user to extract (assuming an ImageXpress microscope is used):', '* The UserStem prefix, and the Well and Site IDs from the filename, as well as the channel number.', '* The 5-digit Plate ID, and optionally, the date of acquisition from the folder name. If needed, the regular expression can modified to collect the barcode ID as well.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Cell>.*)_(?P<Plate>.*)-Scene-(?P<Scene>[0-9]{4})-P(?P<Position>[0-9]*)-(?P<Well>.{3})-(?P<general>.*)_(?P<Channeln>.*)_ORG.tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', 'The settings her match the channels by the channel number collected in the Metadata module.', 'Setting the image set matching method to “Metadata” has the advantage of omitting sites in which there is a metadata mismatch, i.e, missing files.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channeln "DAPI")
    Name to assign these images:Nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channeln "AF488")
    Name to assign these images:ER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channeln "AF594")
    Name to assign these images:AGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channeln "AF514")
    Name to assign these images:RNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channeln "AF647")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '', 'The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '', 'No grouping is needed, so this module is not enabled.']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
    Do you want to group your images?:No
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
Resize:[module_num:5|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
    Select the input image:Nucleus
    Name the output image:downNucleus
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.1
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:downNucleus
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:180
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:7|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
    Select the input image:IllumDNA
    Name the output image:upillDNA
    Resizing method:Resize by specifying desired final dimensions
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    Interpolation method:Bilinear
    Method to specify the dimensions:Image
    Select the image with the desired dimensions:Nucleus
    Additional image count:0

CorrectIlluminationApply:[module_num:8|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
    Select the input image:Nucleus
    Name the output image:CorrBlue
    Select the illumination function:upillDNA
    Select how the illumination function is applied:Divide

Resize:[module_num:9|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
    Select the input image:ER
    Name the output image:downER
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.1
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:10|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
    Select the input image:downER
    Name the output image:IllumER
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:180
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:11|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
    Select the input image:IllumER
    Name the output image:upillER
    Resizing method:Resize by specifying desired final dimensions
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    Interpolation method:Bilinear
    Method to specify the dimensions:Image
    Select the image with the desired dimensions:ER
    Additional image count:0

CorrectIlluminationApply:[module_num:12|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
    Select the input image:ER
    Name the output image:CorrGreen
    Select the illumination function:upillER
    Select how the illumination function is applied:Divide

Resize:[module_num:13|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
    Select the input image:AGP
    Name the output image:downAGP
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.1
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:14|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
    Select the input image:downAGP
    Name the output image:IllumAGP
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:180
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:15|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
    Select the input image:IllumAGP
    Name the output image:upillAGP
    Resizing method:Resize by specifying desired final dimensions
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    Interpolation method:Bilinear
    Method to specify the dimensions:Image
    Select the image with the desired dimensions:AGP
    Additional image count:0

CorrectIlluminationApply:[module_num:16|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
    Select the input image:AGP
    Name the output image:CorrAGP
    Select the illumination function:upillAGP
    Select how the illumination function is applied:Divide

Resize:[module_num:17|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
    Select the input image:RNA
    Name the output image:downRNA
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.1
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:18|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
    Select the input image:downRNA
    Name the output image:IllumRNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:180
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:19|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
    Select the input image:IllumRNA
    Name the output image:upillRNA
    Resizing method:Resize by specifying desired final dimensions
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    Interpolation method:Bilinear
    Method to specify the dimensions:Image
    Select the image with the desired dimensions:RNA
    Additional image count:0

CorrectIlluminationApply:[module_num:20|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
    Select the input image:RNA
    Name the output image:CorrRNA
    Select the illumination function:upillRNA
    Select how the illumination function is applied:Divide

Resize:[module_num:21|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
    Select the input image:Mito
    Name the output image:downMito
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.1
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:22|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
    Select the input image:downMito
    Name the output image:IllumMito
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:180
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:23|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
    Select the input image:IllumMito
    Name the output image:upillMito
    Resizing method:Resize by specifying desired final dimensions
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    Interpolation method:Bilinear
    Method to specify the dimensions:Image
    Select the image with the desired dimensions:Mito
    Additional image count:0

CorrectIlluminationApply:[module_num:24|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
    Select the input image:Mito
    Name the output image:CorrMito
    Select the illumination function:upillMito
    Select how the illumination function is applied:Divide

SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:upillDNA
    Select method for constructing file names:From image filename
    Select image name for file prefix:Nucleus
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    Append a suffix to the image file name?:No
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:upillER
    Select method for constructing file names:From image filename
    Select image name for file prefix:ER
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    Append a suffix to the image file name?:No
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:upillAGP
    Select method for constructing file names:From image filename
    Select image name for file prefix:AGP
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    Append a suffix to the image file name?:No
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:upillRNA
    Select method for constructing file names:From image filename
    Select image name for file prefix:RNA
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    Append a suffix to the image file name?:No
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:upillMito
    Select method for constructing file names:From image filename
    Select image name for file prefix:Mito
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    Append a suffix to the image file name?:No
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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